[
    {
        "object.className": "ProtImportMovies",
        "object.id": "2",
        "object.label": "scipion - import movies",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/dls/tmp/jtq89441/dls/m02/data/2018/em12345-01/raw/GridSquare*/Data",
        "filesPattern": "*.mrc",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": 2000,
        "samplingRateMode": 0,
        "samplingRate": 1.06,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.0,
        "dosePerFrame": 0.5,
        "gainFile": "",
        "darkFile": null,
        "dataStreaming": true,
        "timeout": 43200,
        "fileTimeout": 30,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": 40,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "frames.mrcs",
        "deleteFrames": false,
        "streamingSocket": false,
        "socketPort": 5000
    },
    {
        "object.className": "ProtMotionCorr",
        "object.id": "59",
        "object.label": "motioncorr - motioncorr alignment",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "gpuMsg": "True",
        "gpuList": "3 4",
        "alignFrame0": 1,
        "alignFrameN": 0,
        "useAlignToSum": true,
        "sumFrame0": 1,
        "sumFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveAveMic": true,
        "doSaveMovie": false,
        "doComputePSD": false,
        "doComputeMicThumbnail": true,
        "computeAllFramesAvg": false,
        "extraParams": "",
        "extraProtocolParams": "",
        "useMotioncor2": true,
        "doApplyDoseFilter": true,
        "patchX": 5,
        "patchY": 5,
        "group": 1,
        "tol": 0.5,
        "doMagCor": false,
        "useEst": true,
        "scaleMaj": 1.0,
        "scaleMin": 1.0,
        "angDist": 0.0,
        "extraParams2": "",
        "doSaveUnweightedMic": true,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "2.outputMovies"
    },
    {
        "object.className": "ProtGctf",
        "object.id": "122",
        "object.label": "gctf - CTF estimation on GPU",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "ctfDownFactor": 1.0,
        "lowRes": 0.025,
        "highRes": 0.35,
        "minDefocus": 0.25,
        "maxDefocus": 4.0,
        "astigmatism": 100.0,
        "windowSize": 512,
        "plotResRing": true,
        "gpuList": "1",
        "doEPA": true,
        "EPAsmp": 4,
        "doBasicRotave": false,
        "bfactor": 150,
        "overlap": 0.5,
        "convsize": 85,
        "doHighRes": false,
        "HighResL": 15.0,
        "HighResH": 4.0,
        "HighResBf": 50,
        "doValidate": false,
        "doPhShEst": false,
        "phaseShiftL": 0.0,
        "phaseShiftH": 180.0,
        "phaseShiftS": 10.0,
        "phaseShiftT": 0,
        "streamingWarning": null,
        "streamingSleepOnWait": 1,
        "streamingBatchSize": 1,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMicrographs": "59.outputMicrographs"
    },
    {
        "object.className": "ProtCTFFind",
        "object.id": "184",
        "object.label": "grigoriefflab - ctffind-4",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "ctfDownFactor": 1.0,
        "useCtffind4": true,
        "astigmatism": 100.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 3.15,
        "stepPhaseShift": 0.2,
        "resamplePix": true,
        "slowSearch": false,
        "lowRes": 0.03,
        "highRes": 0.12,
        "minDefocus": 0.25,
        "maxDefocus": 4.0,
        "windowSize": 512,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "inputMicrographs": "59.outputMicrographs"
    },
    {
        "object.className": "ProtGautomatch",
        "object.id": "284",
        "object.label": "gautomatch - auto-picking",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "invertTemplatesContrast": false,
        "angStep": 5,
        "micrographsSelection": 0,
        "micrographsNumber": 10,
        "threshold": 0.1,
        "particleSize": 100,
        "gpuList": "0",
        "advanced": false,
        "boxSize": 128,
        "minDist": 100,
        "speed": 2,
        "advLabel": null,
        "localSigmaCutoff": 1.2,
        "localSigmaDiam": 100,
        "localAvgMin": -1.0,
        "localAvgMax": 1.0,
        "localAvgDiam": 100,
        "lowPass": 30,
        "highPass": 1000,
        "preFilt": false,
        "prelowPass": 8,
        "prehighPass": 1000,
        "exclusive": false,
        "writeCC": false,
        "writeFilt": false,
        "writeBg": false,
        "writeBgSub": false,
        "writeSigma": false,
        "writeMsk": false,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMicrographs": "59.outputMicrographsDoseWeighted"
    },
    {
        "object.className": "ProtRelionExtractParticles",
        "object.id": "353",
        "object.label": "relion - particles extraction",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "boxSize": 220,
        "doRescale": true,
        "rescaledSize": 128,
        "doInvert": true,
        "doNormalize": true,
        "backDiameter": -1,
        "stddevWhiteDust": -1.0,
        "stddevBlackDust": -1.0,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 2,
        "hostName": "localhost",
        "numberOfMpi": 1,
        "ctfRelations": "184.outputCTF",
        "inputCoordinates": "284.outputCoordinates"
    },
    {
        "object.className": "ProtRelionClassify2D",
        "object.id": "398",
        "object.label": "relion - 2D classification",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "isClassify": true,
        "is2D": true,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": false,
        "maskDiameterA": -1,
        "continueIter": "last",
        "numberOfClasses": 10,
        "isMapAbsoluteGreyScale": false,
        "symmetryGroup": "c1",
        "initialLowPassFilterA": 60.0,
        "continueMsg": "True",
        "doCTF": true,
        "hasReferenceCTFCorrected": false,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "numberOfIterations": 25,
        "regularisationParamT": 2,
        "doSubsets": false,
        "subsetSize": 10,
        "subsetUpdates": 3,
        "maskZero": 0,
        "limitResolEStep": 8.0,
        "doImageAlignment": true,
        "inplaneAngularSamplingDeg": 5.0,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "useParallelDisk": true,
        "pooledParticles": 100,
        "allParticlesRam": true,
        "scratchDir": "",
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "1",
        "oversampling": 1,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputParticles": "353.outputParticles"

    },
    {
        "object.className": "ProtMonitor2dStreamer",
        "object.id": "475",
        "object.label": "scipion - 2d streamer",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "batchSize": 500,
        "startingNumber": 0,
        "samplingInterval": 10,
        "inputParticles": "353.outputParticles",
        "input2dProtocol": "398",
        "inputProtocols": [
            "59",
            "184",
       		"304"
       	]
    },
    {
        "object.className": "ProtMonitorISPyB",
        "object.id": "516",
        "object.label": "ispyb - monitor to ISPyB",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "inputProtocols": [
            "59",
            "184",
            "2"
        ],
        "samplingInterval": 60,
        "visit": null,
        "db": 0
    }
]
